PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent flecha
      fillColor = white
      ori [set every repeat] = angle
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent respuesta_ensayo_go
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine ITI_routine
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    CodeComponent code_ITI
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine del code_iti
        import random

        def generate_iti(prev_itis):
            max_attempts = 100
            for _ in range(max_attempts):
                iti = random.randint(1000, 2500)
                if len(prev_itis) < 2:
                    return iti
                diff1 = abs(iti - prev_itis[-1])
                diff2 = abs(iti - prev_itis[-2])
                if not (diff1 < 100 and diff2 < 100):
                    return iti
            return random.choice([1000, 1500, 2000, 2500])

        if 'prev_itis' not in globals():
            prev_itis = []

        iti = generate_iti(prev_itis)
        prev_itis.append(iti)
        if len(prev_itis) > 2:
            prev_itis = prev_itis[-2:]

        iti_secs = iti / 1000.0
    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_secs
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  Routine cruz
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    PolygonComponent cruz_fijacion
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent control_volumen
      Code Type = Auto->JS
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      Begin Routine:
        if trial_type != 'stop':
            SSD = 0
            volume = 0
        else:
             SSD = SSD_dynamic
             volume = 1
             stop_signal.setVolume(1)
             stop_signal.status = NOT_STARTED  # reactiva el sonido
  Routine bloque_A
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    PolygonComponent flecha_A
      fillColor = white
      ori [set every repeat] = angle
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent respuesta_A
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    SoundComponent stop_signal
      sound [set every repeat] = 900
      startVal [time (s)] = SSD
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = volume
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        ensayoClock = core.Clock()
        trial_type_actual = trial_type
      Each Frame:
        # Obtenemos tiempo actual del ensayo
        t = ensayoClock.getTime()

        # --- GO ---
        if trial_type == 'go':
            if respuesta_A.keys and len(respuesta_A.keys) > 0:
                continueRoutine = False
            elif t >= 1.5:
                continueRoutine = False  # omisión

        # --- STOP ---
        elif trial_type == 'stop':
            if respuesta_A.keys and len(respuesta_A.keys) > 0:
                flecha_A.setAutoDraw(False)  # desaparece la flecha
            if t >= 1.5:
                continueRoutine = False  # se termine sí o sí a los 1.5 s
      End Routine:
        if trial_type_actual == 'stop':
            if respuesta_A.keys:
                SSD_dynamic = max(0.05, SSD_dynamic - 0.05)
            else:
                SSD_dynamic = min(0.9, SSD_dynamic + 0.05)

        thisExp.addData('SSD', SSD)
  Routine instrucciones
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = espacio para comenzar
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent definicion_ssd
      Code Type = Auto->JS
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      Begin Experiment:
        SSD_dynamic = 0.25
        # valor que se irá ajustando según el staircase
Flow
  Routine instrucciones
  LoopInitiator A loopType="TrialHandler"
    conditionsFile = conditions/block1_test_sequence.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'stop'), ('direction', 'left'), ('correct_key', None), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'right'), ('correct_key', 'right'), ('angle', 90)]),
      OrderedDict([('trial_type', 'go'), ('direction', 'left'), ('correct_key', 'left'), ('angle', -90)])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
    Routine ITI_routine
    Routine cruz
    Routine bloque_A
  LoopTerminator A
